
name: autolamella_demo
stage_rotation: 230
stage_tilt: 52

fiducial:
  length: 10.e-6
  width: 1.e-6
  depth: 1.0e-6
  milling_current: 28.e-9

lamella:
  beam_shift_attempts: 3
  protocol_stages:
  - lamella_width: 10.e-6
    lamella_height: 800.e-9
    trench_height: 10.e-6
    milling_depth: 1.e-6
    offset: 2.e-6
    size_ratio: 1.0
    milling_current: 2.e-9
  - lamella_width: 10.e-6
    lamella_height: 800.e-9
    trench_height: 2.e-6
    milling_depth: 1.e-6
    offset: 0.5e-6
    size_ratio: 1.0
    milling_current: 0.74e-9
  - lamella_width: 10.e-6
    lamella_height: 800.e-9
    trench_height: 0.5e-6
    milling_depth: 0.4e-6
    offset: 0.0e-6
    size_ratio: 1.0
    milling_current: 60.0e-12

microexpansion:
  width: 0.5e-6
  height: 18.e-6
  distance: 10.e-6 # Does not include Lamella width. So centre of microexpansion is lamella_width/2 + distance.